PsychoPy2experiment version="1.85.0"
Settings
  Monitor = testMonitor
  color = black
  Experiment info = {u'Gender': u'Female', u'Age': u'', u'Session': u'001', u'Name': u'', u'Hand': u''}
  Units = height
  Save excel file = True
  Window size (pixels) = [1440, 900]
  Full-screen window = False
  Show mouse = True
  Data filename = u'data/%s_%s_%s' % (expInfo['Name'], expName, expInfo['date'])
  expName = agency_v2
  Screen = 1
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Routines
  Routine introduction_2
    ImageComponent intro_image_2
      startVal [time (s)] = 0.0
      image = intro_2.png
      size = (0.8, 0.8)
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    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine introduction
    ImageComponent intro_image_1
      startVal [time (s)] = 0.0
      image = intro_1.png
      size = (0.8, 0.8)
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    KeyboardComponent key_resp_1
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine trials
    CodeComponent calc_delay
      Begin Routine:
        delay = 0.0
        outcome_time = 4.2 # initial value, will be changed
        if agency_level=="low":
          delay = 2.0
      Each Frame:
        if not (respond_key.keys in ['', [], None]):
          outcome_time = 2.2 + respond_key.rt + delay
    TextComponent fixation
      text [set every repeat] = +
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 1.0
      font = Samim
      letterHeight = 0.2
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    PolygonComponent circle_1
      fillColor [set every repeat] = $color_1
      stopVal [duration (s)] = 0.2
      pos = (-0.267, 0)
      lineWidth = 0
      startVal [time (s)] = 2.0
      nVertices = 99
      size = (0.3, 0.3)
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    PolygonComponent circle_2
      fillColor [set every repeat] = $color_2
      stopVal [duration (s)] = 0.2
      pos = (+0.267, 0)
      lineWidth = 0
      startVal [time (s)] = 2.0
      nVertices = 99
      size = (0.3, 0.3)
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    StaticComponent ISI
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
    TextComponent respond_text
      text = ؟ﺖﺳﺍﺭ ﺎﯾ ﭗﭼ
      stopVal [duration (s)] = 2.0
      startVal [time (s)] = 2.2
      font = Samim
      letterHeight = 0.08
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    KeyboardComponent respond_key
      stopVal [duration (s)] = 2.0
      forceEndRoutine = False
      allowedKeys = 'left','right'
      startVal [time (s)] = 2.2
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    ImageComponent outcome_image
      startVal [time (s)] = outcome_time
      image = press_space.png
      size = (0.8, 0.8)
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    KeyboardComponent timeout_key
      forceEndRoutine = True
      allowedKeys = 'space','escape'
      startVal [time (s)] = outcome_time
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  Routine thankyou
    ImageComponent thank_you_image
      startVal [time (s)] = 0.0
      image = thankyou.png
      size = (0.8, 0.8)
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  Routine practice_trial_result
    TextComponent text
      text [set during: practice_trial_result.ISI_practice_result] = $practice_key_response.keys
      stopVal [duration (s)] = 2.0
      startVal [time (s)] = 0.5
      letterHeight = 0.1
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    StaticComponent ISI_practice_result
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
  Routine practice_trial
    PolygonComponent left_circle
      fillColor [set during: practice_trial.ISI_practice] = $left_color
      stopVal [duration (s)] = 0.2
      pos = (-0.267, 0)
      lineWidth = 0
      lineColor = $[-1.000,-1.000,-1.000]
      startVal [time (s)] = 0.4
      nVertices = 99
      size = (0.3, 0.3)
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    PolygonComponent right_circle
      fillColor [set during: practice_trial.ISI_practice] = $right_color
      stopVal [duration (s)] = 0.2
      pos = (+0.267, 0)
      lineWidth = 0
      startVal [time (s)] = 0.4
      nVertices = 99
      size = (0.3, 0.3)
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    KeyboardComponent practice_key_response
      forceEndRoutine = True
      allowedKeys = 'y','n','left','right','space'
      startVal [time (s)] = 0.4
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    StaticComponent ISI_practice
      stopVal [duration (s)] = 0.4
      startVal [time (s)] = 0.0
Flow
  Routine introduction
  Routine introduction_2
  LoopInitiator practice_loop loopType="TrialHandler"
    conditionsFile = practice.xlsx
    loopType = random
    nReps = 5
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    conditions:
      [{'right_color': u'limegreen', 'group': 5, 'left_color': u'limegreen', 'correct': u'both'},
      {'right_color': u'limegreen', 'group': 5, 'left_color': u'limegreen', 'correct': u'both'},
      {'right_color': u'limegreen', 'group': 5, 'left_color': u'limegreen', 'correct': u'both'},
      {'right_color': u'limegreen', 'group': 5, 'left_color': u'limegreen', 'correct': u'both'},
      {'right_color': u'limegreen', 'group': 5, 'left_color': u'limegreen', 'correct': u'both'},
      {'right_color': u'mediumblue', 'group': 4, 'left_color': u'snow', 'correct': u'right'},
      {'right_color': u'mediumblue', 'group': 4, 'left_color': u'snow', 'correct': u'right'},
      {'right_color': u'mediumblue', 'group': 4, 'left_color': u'snow', 'correct': u'right'},
      {'right_color': u'mediumblue', 'group': 4, 'left_color': u'snow', 'correct': u'right'},
      {'right_color': u'mediumblue', 'group': 4, 'left_color': u'snow', 'correct': u'right'},
      {'right_color': u'mediumblue', 'group': 4, 'left_color': u'snow', 'correct': u'right'},
      {'right_color': u'mediumblue', 'group': 3, 'left_color': u'crimson', 'correct': u'right'},
      {'right_color': u'mediumblue', 'group': 3, 'left_color': u'crimson', 'correct': u'right'},
      {'right_color': u'mediumblue', 'group': 3, 'left_color': u'crimson', 'correct': u'right'},
      {'right_color': u'mediumblue', 'group': 3, 'left_color': u'crimson', 'correct': u'right'},
      {'right_color': u'mediumblue', 'group': 3, 'left_color': u'crimson', 'correct': u'right'},
      {'right_color': u'mediumblue', 'group': 3, 'left_color': u'crimson', 'correct': u'right'}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
    Routine practice_trial
    Routine practice_trial_result
  LoopTerminator practice_loop
  LoopInitiator trials_loop loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'group': 1, 'char_1': u'A', 'agency_level': u'high', 'group_name': u'explicit', 'condition': 1, 'char_2': u'B', 'color_1': u'red', 'color_2': u'blue'},
      {'group': 2, 'char_1': u'A', 'agency_level': u'high', 'group_name': u'implicit', 'condition': 2, 'char_2': u'C', 'color_1': u'red', 'color_2': u'green'},
      {'group': 3, 'char_1': u'A', 'agency_level': u'high', 'group_name': u'free', 'condition': 3, 'char_2': u'D', 'color_1': u'yellow', 'color_2': u'grey'},
      {'group': 3, 'char_1': u'A', 'agency_level': u'low', 'group_name': u'free', 'condition': 4, 'char_2': u'D', 'color_1': u'yellow', 'color_2': u'purple'},
      {'group': 2, 'char_1': u'A', 'agency_level': u'low', 'group_name': u'implicit', 'condition': 5, 'char_2': u'C', 'color_1': u'red', 'color_2': u'green'},
      {'group': 1, 'char_1': u'A', 'agency_level': u'low', 'group_name': u'explicit', 'condition': 6, 'char_2': u'B', 'color_1': u'red', 'color_2': u'blue'},
      {'group': 0, 'char_1': u'F', 'agency_level': u'high', 'group_name': u'invalid', 'condition': 7, 'char_2': u'L', 'color_1': u'blue', 'color_2': u'white'},
      {'group': 0, 'char_1': u'D', 'agency_level': u'low', 'group_name': u'invalid', 'condition': 8, 'char_2': u'W', 'color_1': u'green', 'color_2': u'blue'},
      {'group': 1, 'char_1': u'A', 'agency_level': u'high', 'group_name': u'explicit', 'condition': 9, 'char_2': u'B', 'color_1': u'red', 'color_2': u'blue'}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
    Routine trials
  LoopTerminator trials_loop
  Routine thankyou
